PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = AcademicSR
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Routines
  Routine Instructions
    TextComponent instruct
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        In this part of the study, you will be choosing between answering practice questions for standardized tests, or playing a videogame.

        You will be completing 5 rounds of the chosen option, and will then be given a chance to choose again.

        Prior to choosing, you will be given a regulation strategy to use. Please employ this strategy while making your decision.

        Press SPACE to begin!
    KeyboardComponent space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Choice
    TextComponent choiceQ
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      stopVal [condition] = blank.status == FINISHED
      text = Please indicate which option you would like to complete by pressing '1' for the choice on the left, or '2' for the choice on the right. 
      wrapWidth = 1.4
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    KeyboardComponent choiceResp
      allowedKeys = '1','2'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [condition] = choiceQ.status == FINISHED
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    TextComponent testChoice
      letterHeight = 0.04
      pos = (-0.41, 0.15)
      startVal [time (s)] = 0.0
      stopVal [condition] = blank.status == FINISHED
      text = Practice Standardized Test Questions
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    TextComponent videogameChoice
      letterHeight = 0.04
      pos = (0.41, 0.15)
      startVal [time (s)] = 0.0
      stopVal [condition] = blank.status == FINISHED
      text = Play a Videogame
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    ImageComponent gre
      image = gre.png
      pos = (-.41, 0.02)
      size = (0.3, 0.105)
      startVal [time (s)] = 0.0
      stopVal [condition] = blank.status == FINISHED
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    ImageComponent gmat
      image = gmat.png
      pos = (-0.41, -0.13)
      size = (0.3, 0.11)
      startVal [time (s)] = 0.0
      stopVal [condition] = blank.status == FINISHED
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    ImageComponent lsat
      image = lsat.png
      pos = (-0.41, -0.27)
      size = (0.3, 0.11)
      startVal [time (s)] = 0.0
      stopVal [condition] = blank.status == FINISHED
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    ImageComponent mcat
      image = mcat.png
      pos = (-0.41, -0.41)
      size = (0.3, 0.11)
      startVal [time (s)] = 0.0
      stopVal [condition] = blank.status == FINISHED
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    ImageComponent game
      image = game.png
      pos = (0.41, -0.19)
      size = (0.4, 0.5)
      startVal [time (s)] = 0.0
      stopVal [condition] = blank.status == FINISHED
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        doTestPractice = []
        doGame = []
      Each Frame:
        if choiceResp.keys == '1':
            testChoice.setColor('green')
        if choiceResp.keys == '2':
            videogameChoice.setColor('green')

        if choiceResp.keys == '2' or choiceResp.keys == '1':
            choiceResp.status = FINISHED
      End Routine:
        videogameChoice.setColor('white')
        testChoice.setColor('white')

        if blank.status == FINISHED:
            choiceQ.setAutoDraw(False)
            testChoice.setAutoDraw(False)
            videogameChoice.setAutoDraw(False)
            gre.setAutoDraw(False)
            gmat.setAutoDraw(False)
            lsat.setAutoDraw(False)
            mcat.setAutoDraw(False)
            continueRoutine = False

        if choiceResp.keys == '1':
            doTestPractice = 1
            doGame = 0
        if choiceResp.keys == '2':
            doTestPractice = 0
            doGame = 1
    TextComponent blank
      letterHeight = 0.1
      startVal [condition] = len(choiceResp.keys) > 0
      stopVal [duration (s)] = 1.5
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  Routine Cue
    TextComponent regCue
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = REGULATE
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  Routine testQuestionsChoice
    TextComponent testQChoice
      letterHeight = 0.055
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = What test would you like to practice questions for? Use the arrow keys to move up and down, then press ENTER to select.
      wrapWidth = 1.3
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    ImageComponent image
      image = gre.png
      pos = (0, 0.105)
      size = (0.3, 0.11)
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image = gmat.png
      pos = (0, -0.05)
      size = (0.3, 0.11)
      startVal [time (s)] = 0.0
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    ImageComponent image_3
      image = lsat.png
      pos = (0, -0.2)
      size = (0.3, 0.11)
      startVal [time (s)] = 0.0
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    ImageComponent image_4
      image = mcat.png
      pos = (0, -0.35)
      size = (0.3, 0.11)
      startVal [time (s)] = 0.0
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    KeyboardComponent upDown
      allowedKeys = '1','2', '3', '4'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    PolygonComponent polygon
      fillColor = $None
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth [set every repeat] = 8
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every frame] = [0,y]
      shape = rectangle
      size [set every repeat] = (0.32, 0.13)
      startVal [condition] = upDown.keys == '1' or upDown.keys == '2' or upDown.keys == '3' or upDown.keys == '4'
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        y = 0
        '''

        if upDown.keys == '1':
            polygon.setPosition = [0, 0.105]
        elif upDown.keys == '2':
            polygon.setPosition = [0, -0.05]
        elif upDown.keys == '3':
            polygon.setPosition = [0, -0.2]
        elif upDown.keys == '4':
            polygon.setPosition = [0, -0.35]
            '''
        if upDown.keys == '1':
            y = 0.105
        elif upDown.keys == '2':
            y = -0.05
        elif upDown.keys == '3':
            y = -0.2
        elif upDown.keys == '4':
            y = -0.35
      Each Frame:
        '''

        if upDown.keys == '1':
            polygon.setPosition = [0, 0.105]
        elif upDown.keys == '2':
            polygon.setPosition = [0, -0.05]
        elif upDown.keys == '3':
            polygon.setPosition = [0, -0.2]
        elif upDown.keys == '4':
            polygon.setPosition = [0, -0.35]
            '''
        if upDown.keys == '1':
            y = 0.105
        elif upDown.keys == '2':
            y = -0.05
        elif upDown.keys == '3':
            y = -0.2
        elif upDown.keys == '4':
            y = -0.35
    KeyboardComponent enter
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine testQs
  Routine Game
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        videogame holder
  Routine ISI
Flow
  Routine Instructions
  LoopInitiator AllTrials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine ISI
    Routine Cue
    Routine ISI
    Routine Choice
    LoopInitiator QuestionTrials loopType="TrialHandler"
      loopType = random
      nReps = doTestPractice
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      Routine testQuestionsChoice
      LoopInitiator Questions5 loopType="TrialHandler"
        loopType = random
        nReps = 1
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        Routine testQs
      LoopTerminator Questions5
    LoopTerminator QuestionTrials
    LoopInitiator GameTrials loopType="TrialHandler"
      loopType = random
      nReps = doGame
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      Routine Game
    LoopTerminator GameTrials
  LoopTerminator AllTrials
