PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = EmotRegPavlovia
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Routines
  Routine intro
    TextComponent Instructions
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        In this part of the study you will be given a regulation strategy to use while viewing various pictures.

        Then you will use a rating scale to indicate how much you are craving the food item.

        You will first be completing a few practice rounds.

        When you are ready, press space to start!
    KeyboardComponent space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Cue
    TextComponent cue
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $CueType
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    TextComponent ISI
      letterHeight = 0.1
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      text [set every repeat] = +
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  Routine BeginInstr
    TextComponent text
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        You will now begin the full task.

        Press SPACE to start!
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine isi
    TextComponent Iti
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = +
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  Routine ratings
    TextComponent ratingQ
      letterHeight = 0.07
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 3
      text [set every repeat] = How would you characterize your feelings at the present moment?
      wrapWidth = 1.3
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    RatingScaleComponent rating
      forceEndRoutine = False
      high = 7
      labels = Very negative, Very positive
      low = 1
      pos = 0, -0.4
      size = 1.4
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 3
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  Routine Pic
    ImageComponent Image
      image [set every repeat] = $Picture
      size [set every repeat] = (1.5, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
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Flow
  Routine intro
  LoopInitiator practiceLoop loopType="TrialHandler"
    Selected rows = 0
    conditionsFile = EmotionRegCues.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('CueType', 'REGULATE')]),
      OrderedDict([('CueType', 'LOOK')]),
      OrderedDict([('CueType', 'LOOK')]),
      OrderedDict([('CueType', 'REGULATE')]),
      OrderedDict([('CueType', 'REGULATE')]),
      OrderedDict([('CueType', 'LOOK')])]
    Routine Cue
    LoopInitiator trials loopType="TrialHandler"
      Selected rows = 0:3
      conditionsFile = EmotionReg.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('CueType', 'REGULATE'), ('Picture', 'OasisPics\\Negative\\angry1.jpg')]),
        OrderedDict([('CueType', 'REAPPRAISE'), ('Picture', 'OasisPics\\Negative\\angry2.jpg')]),
        OrderedDict([('CueType', 'REAPPRAISE'), ('Picture', 'OasisPics\\Negative\\bored.jpg')]),
        OrderedDict([('CueType', 'REAPPRAISE'), ('Picture', 'OasisPics\\Negative\\depressed.jpg')]),
        OrderedDict([('CueType', 'REAPPRAISE'), ('Picture', 'OasisPics\\Negative\\depressed2.jpg')]),
        OrderedDict([('CueType', 'REAPPRAISE'), ('Picture', 'OasisPics\\Negative\\depressed3.jpg')]),
        OrderedDict([('CueType', 'REAPPRAISE'), ('Picture', 'OasisPics\\Negative\\doctor.jpg')]),
        OrderedDict([('CueType', 'REAPPRAISE'), ('Picture', 'OasisPics\\Negative\\doctor2.jpg')]),
        OrderedDict([('CueType', 'REAPPRAISE'), ('Picture', 'OasisPics\\Negative\\frustratedpose.jpg')]),
        OrderedDict([('CueType', 'REAPPRAISE'), ('Picture', 'OasisPics\\Negative\\frustratedpose7.jpg')]),
        OrderedDict([('CueType', 'REAPPRAISE'), ('Picture', 'OasisPics\\Negative\\gun.jpg')]),
        OrderedDict([('CueType', 'REAPPRAISE'), ('Picture', 'OasisPics\\Negative\\hangover.jpg')]),
        OrderedDict([('CueType', 'REAPPRAISE'), ('Picture', 'OasisPics\\Negative\\miserable.jpg')]),
        OrderedDict([('CueType', 'REAPPRAISE'), ('Picture', 'OasisPics\\Negative\neonazi1.jpg')]),
        OrderedDict([('CueType', 'REAPPRAISE'), ('Picture', 'OasisPics\\Negative\\police.jpg')]),
        OrderedDict([('CueType', 'REAPPRAISE'), ('Picture', 'OasisPics\\Negative\\police2.jpg')])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
      Routine Pic
      Routine ratings
      Routine isi
    LoopTerminator trials
  LoopTerminator practiceLoop
  Routine BeginInstr
  LoopInitiator trials_2 loopType="TrialHandler"
    Selected rows = 0:5
    conditionsFile = EmotionRegCues.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('CueType', 'REGULATE')]),
      OrderedDict([('CueType', 'LOOK')]),
      OrderedDict([('CueType', 'LOOK')]),
      OrderedDict([('CueType', 'REGULATE')]),
      OrderedDict([('CueType', 'REGULATE')]),
      OrderedDict([('CueType', 'LOOK')])]
    Routine Cue
    LoopInitiator mainTrials loopType="TrialHandler"
      Selected rows = $rows
      conditionsFile = EmotionReg.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('CueType', 'REGULATE'), ('Picture', 'OasisPics\\Negative\\angry1.jpg')]),
        OrderedDict([('CueType', 'REAPPRAISE'), ('Picture', 'OasisPics\\Negative\\angry2.jpg')]),
        OrderedDict([('CueType', 'REAPPRAISE'), ('Picture', 'OasisPics\\Negative\\bored.jpg')]),
        OrderedDict([('CueType', 'REAPPRAISE'), ('Picture', 'OasisPics\\Negative\\depressed.jpg')]),
        OrderedDict([('CueType', 'REAPPRAISE'), ('Picture', 'OasisPics\\Negative\\depressed2.jpg')]),
        OrderedDict([('CueType', 'REAPPRAISE'), ('Picture', 'OasisPics\\Negative\\depressed3.jpg')]),
        OrderedDict([('CueType', 'REAPPRAISE'), ('Picture', 'OasisPics\\Negative\\doctor.jpg')]),
        OrderedDict([('CueType', 'REAPPRAISE'), ('Picture', 'OasisPics\\Negative\\doctor2.jpg')]),
        OrderedDict([('CueType', 'REAPPRAISE'), ('Picture', 'OasisPics\\Negative\\frustratedpose.jpg')]),
        OrderedDict([('CueType', 'REAPPRAISE'), ('Picture', 'OasisPics\\Negative\\frustratedpose7.jpg')]),
        OrderedDict([('CueType', 'REAPPRAISE'), ('Picture', 'OasisPics\\Negative\\gun.jpg')]),
        OrderedDict([('CueType', 'REAPPRAISE'), ('Picture', 'OasisPics\\Negative\\hangover.jpg')]),
        OrderedDict([('CueType', 'REAPPRAISE'), ('Picture', 'OasisPics\\Negative\\miserable.jpg')]),
        OrderedDict([('CueType', 'REAPPRAISE'), ('Picture', 'OasisPics\\Negative\neonazi1.jpg')]),
        OrderedDict([('CueType', 'REAPPRAISE'), ('Picture', 'OasisPics\\Negative\\police.jpg')]),
        OrderedDict([('CueType', 'REAPPRAISE'), ('Picture', 'OasisPics\\Negative\\police2.jpg')])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
      Routine Pic
      Routine ratings
      Routine isi
    LoopTerminator mainTrials
  LoopTerminator trials_2
