PsychoPy2experiment version="3.2.0"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = SlotMachTest
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Routines
  Routine Instr
    TextComponent Instructions
      color [set every repeat] = white
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.065
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 0.0
      wrapWidth = 1.6
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      text [set every repeat]:
        In this part of the study, you will be making a series of monetary decisions.

        You will have the choice between taking a gamble,  which will be shown on the left side of the screen, or choosing a sure option, which will be on the right side of the screen.

        For each gamble, you will have a chance of either winning money or winning nothing, while the sure option guarantees payoff.

        Press space to continue.
    KeyboardComponent space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Inst2
    TextComponent instruct2
      letterHeight = 0.065
      startVal [time (s)] = 0.0
      wrapWidth = 1.6
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      text:
        You will be given regulation intsructions prior to a block of trials. Please employ the strategy while making your decision.

        You will have three seconds to make your choice upon seeing the options.

        To choose the gamble, press "1". To choose the sure option, press "2".

        You will first be playing some practice rounds. To begin the practice, press enter!
    KeyboardComponent enter
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Practice
    PolygonComponent Line
      fillColor [set every repeat] = $[-1.000,-1.000,-1.000]
      lineColor [set every repeat] = $[-1.000,-1.000,-1.000]
      lineWidth [set every repeat] = 7
      ori = 90
      shape = line
      size [set every repeat] = (3, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    KeyboardComponent choice
      allowedKeys [set every repeat] = '1','2'
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
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    TextComponent GambleAmt
      color [set every repeat] = white
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.11
      pos [set every repeat] = (-0.41, -0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
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    TextComponent SureAmt
      color [set every repeat] = white
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.11
      pos [set every repeat] = (0.41, -0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
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    TextComponent GambleProb
      color [set every repeat] = white
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.13
      pos [set every repeat] = (-0.41, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
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    TextComponent SureProb
      color [set every repeat] = white
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.13
      pos [set every repeat] = (0.41, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
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    CodeComponent code
      Code Type = Both
      Begin Experiment:
        import numpy
        from numpy import random

        earnings = 0
        earningsStr = "$" + str(earnings)
        subID = int(expInfo['participant'])

        FiftyGamble = [1,0]
        SixtyGamble = [1,1,1,1,1,1,1,1,1,1,1,1,1,0,0,0,0,0,0,0]
        ThirtyGamble = [1,1,1,1,1,1,1,0,0,0,0,0,0,0,0,0,0,0,0,0]

        earning=0
        chosenMoney = 0


        #probability =[]
        def gamProbability(gamProb):
            probs = int(gamProb)
            if probs == 65:
                probability = SixtyGamble
                print('65% gamble')
            if probs == 35:
                probability = ThirtyGamble
                print('35% gamble')
            if probs == 50:
                probability = FiftyGamble
                print('50% gamble')
        def gambleFunc(gamProb):
            probs = int(gamProb)
            if probs == 65:
                probability = SixtyGamble
                #print('65% gamble')
            if probs == 35:
                probability = ThirtyGamble
                print('35% gamble')
            if probs == 50:
                probability = FiftyGamble
                print('50% gamble')
            result = random.choice(probability)
            print('gamble result:')
            print(result)

        def loseFunc(chosenMoney, earning):
            earning -= chosenMoney
            print('Lost Money earnings:')
            print(earning)
        def winFunc(chosenMoney, earning):
            earning += chosenMoney
            print('Won money earnings:')
            print(earning)

        def earningsFunct(gamProb, chosenMoney, WinLossType, earning):
           if subID%2==0:   #gambles are on left side of screen
               if choice.keys == '1' and WinLossType== 1 :
                   print('gambled during win condition')
                   #gamProbability(gamProb)
                   probs = int(gamProb)
                   if probs == 65:
                       probability = SixtyGamble
                       print('65% gamble')
                   if probs == 35:
                       probability = ThirtyGamble
                       print('35% gamble')
                   if probs == 50:
                       probability = FiftyGamble
                       print('50% gamble')
                   result = random.choice(probability)
                   print('gamble result:')
                   print(result)
                   if result == 1:   #win
                       earning += chosenMoney
                       print('Won money earnings:')
                       print(earning)
               #    if result == 0: #lose
                #       earnings += 0

               if choice.keys == '1' and WinLossType==0:
                   print('gambled during lose condition')
                   #gamProbability(gamProb)
                   probs = int(gamProb)
                   if probs == 65:
                       probability = SixtyGamble
                #print('65% gamble')
                   if probs == 35:
                       probability = ThirtyGamble
                       print('35% gamble')
                   if probs == 50:
                       probability = FiftyGamble
                       print('50% gamble')
                   result = random.choice(probability)
                   print('gamble result:')
                   print(result)
                   if result == 1: #lose
                       earning -= chosenMoney
                       print('Lost Money earnings:')
                       print(earning)
             #      if result == 0: #win
             #          earnings += 0

               if choice.keys == '2'and WinLossType ==1:
                   print('did not gamble for win')
                   earning += chosenMoney
                   print('Won money earnings:')
                   print(earning)
               if choice.keys == '2' and WinLossType == 0:
                   print('did not gamble for loss')
                   earning -= chosenMoney
                   print('Lost Money earnings:')
                   print(earning)


           if subID%2==1:  #gambles are on right side of screen
               if choice.keys == '2' and WinLossType == 1:
                   print('gambled during win condition')
                   #gamProbability(gamProb)
                   probs = int(gamProb)
                   if probs == 65:
                       probability = SixtyGamble
                       print('65% gamble')
                   if probs == 35:
                       probability = ThirtyGamble
                       print('35% gamble')
                   if probs == 50:
                       probability = FiftyGamble
                       print('50% gamble')
                   result = random.choice(probability)
                   print('gamble result:')
                   print(result)
                   if result == 1: #win
                       winFunc(chosenMoney, earning)
            #       if result == 0: #lost
            #           earnings += 0


               if choice.keys == '2' and WinLossType == 0:
                   print('gambled during lose condition')
                   #gamProbability(gamProb)
                   probs = int(gamProb)
                   if probs == 65:
                       probability = SixtyGamble
                       print('65% gamble')
                   if probs == 35:
                       probability = ThirtyGamble
                       print('35% gamble')
                   if probs == 50:
                       probability = FiftyGamble
                       print('50% gamble')
                   result = random.choice(probability)
                   print('gamble result:')
                   print(result)
                   if result == 1: #lose
                       earning -= chosenMoney
                       print('Lost Money earnings:')
                       print(earning)
             #      if result == 0: #win
             #          earnings += 0

               if choice.keys == '1' and WinLossType == 1:
                   print('did not gamble for win')
                   earning += chosenMoney
                   print('Won money earnings:')
                   print(earning)
               if choice.keys == '1' and WinLossType == 0:
                   print('did not gamble for lose condition')
                   earning -= chosenMoney
                   print('Lost Money earnings:')
                   print(earning)
      Begin JS Experiment:
        earnings = 0
        earningsStr = "$" + str(earnings)
        subID = parseInt(expInfo['participant'])

        FiftyGamble = [1,0]
        SixtyGamble = [1,1,1,1,1,1,1,1,1,1,1,1,1,0,0,0,0,0,0,0]
        ThirtyGamble = [1,1,1,1,1,1,1,0,0,0,0,0,0,0,0,0,0,0,0,0]

        earning=0
        chosenMoney = 0
      Begin JS Routine:
        leftVarText=[]
        leftVarMoney = []
        rightVarText = []
        rightVarMoney = []
        result = []

        if (subID%2 == 1){
            leftVarText = (gambleWinLoss);
            leftVarMoney = (gamble);
            rightVarText = (sureWinLoss);
            rightVarMoney = (sure);
            }
        if (subID%2 == 0){
            rightVarText= (gambleWinLoss);
            rightVarMoney= (gamble);
            leftVarText= (sureWinLoss);
            leftVarMoney= (sure);
            }

        GambleAmt.setText(leftVarMoney)
        SureAmt.setText(rightVarMoney)
        GambleProb.setText(leftVarText)
        SureProb.setText(rightVarText)

        leftMoney = parseFloat(leftVarMoney[1:])

        rightMoney = parseFloat(rightVarMoney[1:])

        WinLossType = parseInt(WinLossCode)
      Begin Routine:
        leftVarText=[]
        leftVarMoney = []
        rightVarText = []
        rightVarMoney = []
        result = []

        if subID%2 == 1 :
            leftVarText = (gambleWinLoss)
            leftVarMoney = (gamble)
            rightVarText = (sureWinLoss)
            rightVarMoney = (sure)
        if subID%2 == 0:
            rightVarText= (gambleWinLoss)
            rightVarMoney= (gamble)
            leftVarText= (sureWinLoss)
            leftVarMoney= (sure)

        GambleAmt.setText(leftVarMoney)
        SureAmt.setText(rightVarMoney)
        GambleProb.setText(leftVarText)
        SureProb.setText(rightVarText)

        leftMoney = float(leftVarMoney[1:])

        rightMoney = float(rightVarMoney[1:])

        WinLossType = int(WinLossCode)
      Each Frame:
        if choice.keys == '1':
            GambleAmt.setColor('green')
            chosenMoney = leftMoney
        if choice.keys == '2':
            SureAmt.setColor('green')
            chosenMoney = rightMoney

        if (choice.keys == '1' or choice.keys == '2') and blank.status == NOT_STARTED:
            blank.tStart = t
            blank.frameNStart = frameN
            blank.setAutoDraw(True)
        #gamProbability(gambleProb)
        #gambleFunc(gambleProb)
        #earningsFunct(gambleProb, chosenMoney, WinLossCode, earnings)
        #print(earnings)



        #earningsText.setText(earningsStr)
      Each JS Frame:
        if (choice.keys == '1'){
            GambleAmt.setColor('green');
            chosenMoney = leftMoney;
            }
        if (choice.keys == '2'){
            SureAmt.setColor('green');
            chosenMoney = rightMoney;
            }

        if ((choice.keys == '1' or choice.keys == '2') && blank.status == NOT_STARTED){
            blank.tStart = t;
            blank.frameNStart = frameN;
            blank.setAutoDraw(true);
            }
      End JS Routine:
        if (choice.keys == '1'){
            chosenMoney = leftMoney;
            }
        if (choice.keys == '2'){
            chosenMoney = rightMoney;
            }
        if (choice.keys != None){
            if (subID%2==1){
               if (choice.keys == '1' && WinLossCode== 1){
                   print('gambled during win condition');
                   probs = int(gambleProb);
                   if (probs == 65){
                       probability = SixtyGamble;
                       print('65% gamble');
                       }
                   if (probs == 35){
                       probability = ThirtyGamble;
                       print('35% gamble');
                       }
                   if (probs == 50){
                       probability = FiftyGamble;
                       print('50% gamble');
                       }
                   result = random.choice(probability);
                   print('gamble result:');
                   print(result);
                   }
                   if (result == 1){
                       earnings = earnings + chosenMoney;
                       print('Won money earnings:');
                       print(earnings);
                   #    if result == 0: #lose
                    #       earnings += 0

               if (choice.keys == '1' && WinLossCode==0){
                   print('gambled during lose condition');
                  #gamProbability(gamProb)
                   probs = int(gambleProb);
                   if (probs == 65){
                       probability = SixtyGamble;
                       print('65% gamble');
                       }
                   if (probs == 35){
                       probability = ThirtyGamble;
                       print('35% gamble');
                       }
                   if (probs == 50){
                       probability = FiftyGamble;
                       print('50% gamble');
                       }
                   result = random.choice(probability);
                   print('gamble result:');
                   print(result);
                   }
                   if (result == 1){
                      earnings = earnings - chosenMoney;
                      print('Lost Money earnings:');
                      print(earnings);
                      }
                 #      if result == 0: #win
                 #          earnings += 0

               if (choice.keys == '2'&& WinLossCode ==1){
                   print('did not gamble for win condition');
                   earnings = earnings + chosenMoney;
                   print('Won sure money earnings:');
                   print(earnings)       ;
                   }
               if (choice.keys == '2' and WinLossCode == 0){
                   earnings = earnings - chosenMoney;
                   print('Lost sure Money earnings:');
                   print(earnings);
                   }


            if (subID%2==0){
               if (choice.keys == '2' && WinLossCode == 1){
                   print('gambled during win condition');
                   probs = int(gambleProb);
                   }
                   if (probs == 65){
                       probability = SixtyGamble;
                       print('65% gamble');
                       }
                   if (probs == 35){
                       probability = ThirtyGamble;
                       print('35% gamble');
                   if (probs == 50){
                       probability = FiftyGamble;
                       print('50% gamble');
                       }
                   result = random.choice(probability);
                   print('gamble result:');
                   print(result);
                   }
                   if (result == 1){
                       earnings = earnings + chosenMoney;
                       print('won money earnings:');
                       print(earnings);
                       }

               if (choice.keys == '2' && WinLossCode == 0){
                   print('gambled during lose condition');

                   probs = int(gambleProb);
                   }
                   if (probs == 65){
                       probability = SixtyGamble;
                       print('65% gamble');
                       }
                   if (probs == 35){
                       probability = ThirtyGamble;
                       print('35% gamble');
                       }
                   if (probs == 50){
                       probability = FiftyGamble;
                       print('50% gamble');
                       }
                   result = random.choice(probability);
                   print('gamble result:');
                   print(result);
                   }
                   if (result == 1){
                       earnings = earnings - chosenMoney;
                       print('Lost Money earnings:');
                       print(earnings);
                       }

               if (choice.keys == '1' && WinLossCode == 1){
                   print('did not gamble during win condition');
                   earnings = earnings + chosenMoney;
                   print('Won sure money earnings:');
                   print(earnings);
                   }
               if (choice.keys == '1' && WinLossCode == 0){
                   print('did not gamble for loss condition');
                   earnings = earnings - chosenMoney;
                   print('Lost sure Money earnings:');
                   print(earnings);
                   }
            earningsStr= str(earnings);
            earningsText.setText(earningsStr);
        GambleAmt.setColor('white');
        SureAmt.setColor('white');

        if (blank.status==FINISHED){
            GambleAmt.setAutoDraw(false);
            SureAmt.setAutoDraw(false);
            SureProb.setAutoDraw(false);
            GambleProb.setAutoDraw(false);
            Line.setAutoDraw(false);
            moneyBank.setAutoDraw(false);
            }
      End Routine:
        if choice.keys == '1':
            chosenMoney = leftMoney
        if choice.keys == '2':
            chosenMoney = rightMoney
        if choice.keys != None:
            if subID%2==1:   #gambles are on left side of screen
               if choice.keys == '1' and WinLossCode== 1 :
                   print('gambled during win condition')
                   probs = int(gambleProb)
                   if probs == 65:
                       probability = SixtyGamble
                       print('65% gamble')
                   if probs == 35:
                       probability = ThirtyGamble
                       print('35% gamble')
                   if probs == 50:
                       probability = FiftyGamble
                       print('50% gamble')
                   result = random.choice(probability)
                   print('gamble result:')
                   print(result)
                   if result == 1:   #win
                       earnings = earnings + chosenMoney
                       print('Won money earnings:')
                       print(earnings)
                   #    if result == 0: #lose
                    #       earnings += 0

               if choice.keys == '1' and WinLossCode==0:
                   print('gambled during lose condition')
                  #gamProbability(gamProb)
                   probs = int(gambleProb)
                   if probs == 65:
                       probability = SixtyGamble
                       print('65% gamble')
                   if probs == 35:
                       probability = ThirtyGamble
                       print('35% gamble')
                   if probs == 50:
                       probability = FiftyGamble
                       print('50% gamble')
                   result = random.choice(probability)
                   print('gamble result:')
                   print(result)
                   if result == 1: #lose
                      earnings = earnings - chosenMoney
                      print('Lost Money earnings:')
                      print(earnings)
                 #      if result == 0: #win
                 #          earnings += 0

               if choice.keys == '2'and WinLossCode ==1:
                   print('did not gamble for win condition')
                   earnings = earnings + chosenMoney
                   print('Won sure money earnings:')
                   print(earnings)
               if choice.keys == '2' and WinLossCode == 0: #did not gamble for lose condition
                   earnings = earnings - chosenMoney
                   print('Lost sure Money earnings:')
                   print(earnings)


            if subID%2==0:  #gambles are on right side of screen
               if choice.keys == '2' and WinLossCode == 1:
                   print('gambled during win condition')
                   probs = int(gambleProb)
                   if probs == 65:
                       probability = SixtyGamble
                       print('65% gamble')
                   if probs == 35:
                       probability = ThirtyGamble
                       print('35% gamble')
                   if probs == 50:
                       probability = FiftyGamble
                       print('50% gamble')
                   result = random.choice(probability)
                   print('gamble result:')
                   print(result)
                   if result == 1: #win
                       earnings = earnings + chosenMoney
                       print('won money earnings:')
                       print(earnings)
                #       if result == 0: #lost
                #           earnings += 0


               if choice.keys == '2' and WinLossCode == 0:
                   print('gambled during lose condition')
                      #gamProbability(gamProb)
                   probs = int(gambleProb)
                   if probs == 65:
                       probability = SixtyGamble
                       print('65% gamble')
                   if probs == 35:
                       probability = ThirtyGamble
                       print('35% gamble')
                   if probs == 50:
                       probability = FiftyGamble
                       print('50% gamble')
                   result = random.choice(probability)
                   print('gamble result:')
                   print(result)
                   if result == 1: #lose
                       earnings = earnings - chosenMoney
                       print('Lost Money earnings:')
                       print(earnings)
                 #      if result == 0: #win
                 #          earnings += 0

               if choice.keys == '1' and WinLossCode == 1:
                   print('did not gamble during win condition')
                   earnings = earnings + chosenMoney
                   print('Won sure money earnings:')
                   print(earnings)
               if choice.keys == '1' and WinLossCode == 0:
                   print('did not gamble for loss condition')
                   earnings = earnings - chosenMoney
                   print('Lost sure Money earnings:')
                   print(earnings)
            earningsStr= str(earnings)
            earningsText.setText(earningsStr)
        GambleAmt.setColor('white')
        SureAmt.setColor('white')

        if (blank.status==FINISHED):
            GambleAmt.setAutoDraw(False)
            SureAmt.setAutoDraw(False)
            SureProb.setAutoDraw(False)
            GambleProb.setAutoDraw(False)
            Line.setAutoDraw(False)
            moneyBank.setAutoDraw(False)
    TextComponent blank
      letterHeight = 0.1
      stopVal [duration (s)] = 1.5
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    PolygonComponent moneyBank
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 8
      pos = (0.68, -0.42)
      shape = rectangle
      size = (0.46, 0.24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent earningsText
      letterHeight = 0.1
      pos = (0.67, -0.42)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $earningsStr
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  Routine BeginInst
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = You will now begin the full task.
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    CodeComponent code_3
      Code Type = Both
      End JS Routine:
        earnings = 0;
        earning = 0;
      End Routine:
        earnings = 0
        earning = 0
  Routine Main
    KeyboardComponent choice2
      allowedKeys [set every repeat] = '1','2'
      forceEndRoutine = False
      stopVal [duration (s)] = 3
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    TextComponent sureAmt
      letterHeight = 0.11
      pos = (0.41, -0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      text [set every repeat] = $sure
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    TextComponent gambleAmt
      letterHeight = 0.11
      pos = (-0.41, -0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      text [set every repeat] = $gamble
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    TextComponent GambleProbability
      letterHeight = 0.13
      pos = (-0.41, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      text [set every repeat] = $gambleProb
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    TextComponent sureProb
      letterHeight = 0.13
      pos = (0.41, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = 100%
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        if choice2.keys == '1':
            gambleAmt.setColor('green')
        if choice2.keys == '2':
            sureAmt.setColor('green')

        if (choice2.keys == '1' or choice.keys == '2') and blank.status == NOT_STARTED:
            blank.tStart = t
            blank.frameNStart = frameN
            blank.setAutoDraw(True)
      Each Frame:
        if choice2.keys == '1':
            gambleAmt.setColor('green')
        if choice2.keys == '2':
            sureAmt.setColor('green')

        if (choice2.keys == '1' or choice.keys == '2') and blank.status == NOT_STARTED:
            blank.tStart = t
            blank.frameNStart = frameN
            blank.setAutoDraw(True)
      End Routine:
        gambleAmt.setColor('white')
        sureAmt.setColor('white')

        if (blank.status==FINISHED):
            gambleAmt.setAutoDraw(False)
            sureAmt.setAutoDraw(False)
            sureProb.setAutoDraw(False)
            GambleProbability.setAutoDraw(False)
    TextComponent blank2
      letterHeight = 0.1
      stopVal [duration (s)] = 2
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    PolygonComponent line
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth [set every repeat] = 4
      ori = 90
      shape = line
      size [set every repeat] = (3, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine isi
    TextComponent isi2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = +
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  Routine Cue
    TextComponent cue
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $CueType
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  Routine PracticeCue
    TextComponent text
      letterHeight = 0.13
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = REGULATE
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Flow
  Routine Instr
  Routine Inst2
  Routine isi
  Routine PracticeCue
  LoopInitiator PracticeLoop loopType="TrialHandler"
    Selected rows = 0:3
    conditionsFile = PracticeSlotMach.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('PracticeSure', '$4.50 '), ('PracticeGamble', '$6.75 '), ('PracticeGambleProb', '50%'), ('Rows', '000:0010'), ('CueType', 'LOOK')]),
      OrderedDict([('PracticeSure', '$2.00 '), ('PracticeGamble', '$4.25 '), ('PracticeGambleProb', '65%'), ('Rows', '00010:0020'), ('CueType', 'REAPPRAISE')]),
      OrderedDict([('PracticeSure', '$3.75 '), ('PracticeGamble', '$7.50 '), ('PracticeGambleProb', '35%'), ('Rows', '00020:0030'), ('CueType', 'REAPPRAISE')]),
      OrderedDict([('PracticeSure', None), ('PracticeGamble', None), ('PracticeGambleProb', None), ('Rows', '0030:0040'), ('CueType', 'LOOK')]),
      OrderedDict([('PracticeSure', None), ('PracticeGamble', None), ('PracticeGambleProb', None), ('Rows', '0040:0050'), ('CueType', 'REAPPRAISE')]),
      OrderedDict([('PracticeSure', None), ('PracticeGamble', None), ('PracticeGambleProb', None), ('Rows', '0050:0060'), ('CueType', 'LOOK')])]
    Routine isi
    Routine Practice
  LoopTerminator PracticeLoop
  Routine BeginInst
  LoopInitiator mainLoop loopType="TrialHandler"
    conditionsFile = PracticeSlotMach.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('PracticeSure', '$4.50 '), ('PracticeGamble', '$6.75 '), ('PracticeGambleProb', '50%'), ('Rows', '000:0010')]),
      OrderedDict([('PracticeSure', '$2.00 '), ('PracticeGamble', '$4.25 '), ('PracticeGambleProb', '65%'), ('Rows', '00010:0020')]),
      OrderedDict([('PracticeSure', '$3.75 '), ('PracticeGamble', '$7.50 '), ('PracticeGambleProb', '35%'), ('Rows', '00020:0030')]),
      OrderedDict([('PracticeSure', None), ('PracticeGamble', None), ('PracticeGambleProb', None), ('Rows', '0030:0040')]),
      OrderedDict([('PracticeSure', None), ('PracticeGamble', None), ('PracticeGambleProb', None), ('Rows', '0040:0050')]),
      OrderedDict([('PracticeSure', None), ('PracticeGamble', None), ('PracticeGambleProb', None), ('Rows', '0050:0060')])]
    Routine isi
    Routine Cue
    LoopInitiator trials loopType="TrialHandler"
      Selected rows = $Rows
      conditionsFile = SlotMachine.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('instructions', 'In this part of the study, you will be making a series of monetary decisions.\n\nYou will have the choice between taking a gamble,  which will be shown on the left side of the screen, or choosing a sure option, which will be on the right side of the screen. \n\nFor each gamble, you will have a 50% chance of winning money, while the sure option guarantees payoff. \n\nPress space to continue. '), ('sure', '$2.50'), ('gamble', '$6.75'), ('CueType', 'LOOK'), ('gambleProb', '50%'), ('Rows', '0000:0010'), ('PracticeSure', '$4.50'), ('PracticeGamble', '$6.75'), ('Pract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,
        OrderedDict([('instructions', 'You will have three seconds to make your choice upon seeing the options. \n\nTo choose the gamble, press "1". To choose the sure option, press "2".\n\nYou will first be playing some practice rounds. To begin the practice, press enter!'), ('sure', '$4.25'), ('gamble', '$10.75'), ('CueType', 'REAPPRAISE'), ('gambleProb', '35%'), ('Rows', None), ('PracticeSure', '$2.00'), ('PracticeGamble', '$4.25'), ('PracticeGambleProb', '65%'), ('cueRows', None)]),
        OrderedDict([('instructions', None), ('sure', '$8.00'), ('gamble', '$12.50'), ('CueType', 'LOOK'), ('gambleProb', '65%'), ('Rows', None), ('PracticeSure', '$3.75'), ('PracticeGamble', '$7.50'), ('PracticeGambleProb', '35%'), ('cueRows', None)]),
        OrderedDict([('instructions', None), ('sure', '$1.00'), ('gamble', '$4.25'), ('CueType', 'REAPPRAISE'), ('gambleProb', '50%'), ('Rows', None), ('PracticeSure', None), ('PracticeGamble', None), ('PracticeGambleProb', None), ('cueRows', None)])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
      Routine isi
      Routine Practice
    LoopTerminator trials
  LoopTerminator mainLoop
